PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = manipulation-of-belief
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine aaa
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = 'I don\'t like them','','','','I really like them'
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = norm
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  Routine r_instructions
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    TextComponent instructions_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        You’ll watch four short, content-friendly videos where each one has a label that either says “AI-generated” or “human-generated”.

        After each video, you’ll fill out a short questionnaire about your experience with this video.

        You can stop and withdraw at any time if you feel uncomfortable or simply don’t want to continue.

        Press SPACE when you're ready.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        instructions_text.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        instructions_text.setAlignHoriz('left')
  Routine r_preparation
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    CodeComponent load_design
      Code Type = Py
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      Begin Experiment:
        import csv
        import time

        base_dir = os.path.dirname(__file__)

        csv_path = os.path.join(base_dir, 'variables', 'subjects_design.csv')

        stimuli_design = []
        with open(csv_path, 'r') as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                stimuli_design.append(row)

        subj_num = int(expInfo['participant'])
        selected_order = stimuli_design[subj_num]

        print(f"Subject {subj_num} - selected order: {selected_order}")

        thisExp.addData('expStartTime', time.time())
      Begin Routine:
        video_file = os.path.join(base_dir, 'stimuli', selected_order[f'video{video_index}'])
        label_text = selected_order[f'label{video_index}']

        stimuli.addData('video_id', selected_order[f'video{video_index}'])
        stimuli.addData('belief', selected_order[f'label{video_index}'])
      End Experiment:
        thisExp.addData('expEndTime', time.time())
    TextComponent video_nature_cue_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $"The next video is going to be " + "\n" + str(label_text) + "\n\n" + str(5-int(t))
      units = norm
      wrapWidth = 1.8
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  Routine r_video
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    MovieComponent video
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video_file
      size = (2.0,2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = norm
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  Routine r_SAM_1
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    TextComponent question_sam_1_text
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Press a button 1-5 to express how the last video made you feel about being
        unhappy / happy

        (1 = very unhappy, 5 = very happy)
    ImageComponent question_sam_1
      image = stimuli/sam-1.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_1
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine r_SAM_2
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    TextComponent question_sam_2_text
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Press a button 1-5 to express how the last video made you feel about being
        calm / excited

        (1 = very calm, 5 = very excited)
    ImageComponent question_sam_2
      image = stimuli/sam-2.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine r_SAM_3
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    TextComponent question_sam_3_text
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Press a button 1-5 to express how the last video made you feel about being
        controlled / incontrolled

        (1 = very controlled, 5 = very incontrolled)
    ImageComponent question_sam_3
      image = stimuli/sam-3.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_3
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine r_final_questionnaire
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    TextComponent opinion_text
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In general, what is your opinion on AI-generated visual contents (specifically AI-generated videos)?
      units = norm
      wrapWidth = 1.8
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    SliderComponent opinion_slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = 'I don\'t like them','','','','I really like them'
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = norm
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  Routine r_bck_form
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    FormComponent final_questionnaire_form_2
      Data Format = rows
      Font = Arial
      Item Padding = 0.03
      Items = variables/final_questionnaire_form.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1.0,1.0)
      startVal [time (s)] = 0.0
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  Routine r_focus_questionnaire
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    TextComponent focus_text
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In general, how focused were you about what was happening on the screen when watching the previous video?
      units = norm
      wrapWidth = 1.8
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    SliderComponent focus_slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = 'Not focused at all','','','','Very focused'
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = norm
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  Routine r_baseline
    TextComponent baseline_countdown
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every frame] = $"{:02d}:{:02d}".format((120-int(t))//60, (120-int(t))%60)
      units = norm
      wrapWidth = 1.8
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
    TextComponent baseline_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = norm
      wrapWidth = 1.8
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      text:
        Please now wait still and relax while we measure the baseline for your heartbeat at rest.

        Only good vibes :)
    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        baseline_text.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        baseline_text.setAlignHoriz('left')
  Routine r_fixation
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    PolygonComponent fixation_cross
      fillColor = -0.1765, -0.1765, -0.1765
      shape = cross
      size = (30,30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  Routine r_instructions
  Routine r_baseline
  LoopInitiator stimuli loopType="TrialHandler"
    conditionsFile = variables/stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('video_index', np.int64(1))]),
      OrderedDict([('video_index', np.int64(2))]),
      OrderedDict([('video_index', np.int64(3))]),
      OrderedDict([('video_index', np.int64(4))])]
    Routine r_preparation
    Routine r_fixation
    Routine r_video
    Routine r_SAM_1
    Routine r_SAM_2
    Routine r_SAM_3
    Routine r_focus_questionnaire
  LoopTerminator stimuli
  Routine r_final_questionnaire
